CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Date>.*)_(?P<Person>[A-Z]{3})_(?P<Cohort>[A-Z,1-9]{3})_(?P<Region>[A-Z]{4})_(?P<Time>[A-Z]{2})_(?P<Mouse>.*)_(?P<Slide>.*)_(?P<Marker1>.*)_(?P<Marker2>.*)_(?P<Probe1>.*)_(?P<Marker3>.*)_(?P<Probe2>.*)_(?P<Marker4>.*)_(?P<Probe3>.*)_(?P<Section>.*)_(?P<ROI>.*)_(?P<arb>.*)_(?P<Tissue>.*)_(?P<Chan>.*)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Ch0001")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch0002")
    Name to assign these images:Piezo1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch0003")
    Name to assign these images:Arntl
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch0004")
    Name to assign these images:Per1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI
    Name the primary objects to be identified:nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,70
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.2
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.01,1.0
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    Size of adaptive window:50
    Lower outlier fraction:0.04
    Upper outlier fraction:0.5
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
    Thresholding method:Robust Background

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Piezo1
    Name the primary objects to be identified:Piezo1_puncta
    Typical diameter of objects, in pixel units (Min,Max):2,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.2
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.01,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:Arntl
    Name the primary objects to be identified:Arntl_puncta
    Typical diameter of objects, in pixel units (Min,Max):2,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.2
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.01,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:Per1
    Name the primary objects to be identified:Per1_puncta
    Typical diameter of objects, in pixel units (Min,Max):2,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.2
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.01,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifySecondaryObjects:[module_num:9|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
    Select the input objects:nuclei
    Name the objects to be identified:nuclei_expanded
    Select the method to identify the secondary objects:Distance - N
    Select the input image:DAPI
    Number of pixels by which to expand the primary objects:10
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
RelateObjects:[module_num:10|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
    Parent objects:nuclei_expanded
    Child objects:Piezo1_puncta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Piezo1_puncta_per_ExpandedNucleus
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
RelateObjects:[module_num:11|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
    Parent objects:nuclei_expanded
    Child objects:Arntl_puncta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Arntl_puncta_per_ExpandedNucleus
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
RelateObjects:[module_num:12|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
    Parent objects:nuclei_expanded
    Child objects:Per1_puncta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Per1_puncta_per_ExpandedNucleus
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
ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|\\\\data.arcc.uwyo.edu\\cluster\\alcova\\bedfordlab\\Nocturia\\Bladder Images\\CellProfiler\\OUTPUT\\Detrusor2
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Series_DAPI,Image|Series_Piezo1,Image|Series_Arntl,Image|Series_Per1,Image|MD5Digest_Arntl,Image|MD5Digest_Per1,Image|MD5Digest_Piezo1,Image|MD5Digest_DAPI,Image|Count_Piezo1_puncta,Image|Count_Piezo1_puncta_per_ExpandedNucleus,Image|Count_Per1_puncta,Image|Count_Per1_puncta_per_ExpandedNucleus,Image|Count_nuclei,Image|Count_nuclei_expanded,Image|Count_Arntl_puncta,Image|Count_Arntl_puncta_per_ExpandedNucleus,Image|Threshold_GuideThreshold_nuclei,Image|Threshold_WeightedVariance_Piezo1_puncta,Image|Threshold_WeightedVariance_Per1_puncta,Image|Threshold_WeightedVariance_Arntl_puncta,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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